PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Experiment info = {u'gender': u'', u'age': u'', u'name': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Data filename = 'data/%s_%s_%s' %(expInfo['name'], expName, expInfo['date'])
  expName = Sensor Calibration
  logging level = warning
  Screen = 1
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Routines
  Routine trial
    CodeComponent trials_code
      Begin Experiment:
        #declare accuracy feedback message variable
        msg=""
        name = expInfo['name']
        biasName = "calibrationData%s.txt" %name
        biasFile = open(biasName, "w")
        #print("hello")
        time.sleep(3)
      Each Frame:
        if ser.in_waiting > 0:
            biasFile.write(ser.readline())
      Begin Routine:
        #import ctypes  # An included library with Python install.
        #ctypes.windll.user32.MessageBoxW(0, "Your text", "Your title", 1)


        # choose a random exemplar from the appropriate trial type list
        if trial_type == 1:
            text_stimulus = text_trial_type_1_trials.pop()
            image_stimulus = img_trial_type_1_trials.pop()
        elif trial_type == 2:
            text_stimulus = text_trial_type_2_trials.pop()
            image_stimulus = img_trial_type_2_trials.pop()
        elif trial_type == 3:
            text_stimulus = text_trial_type_3_trials.pop()
            image_stimulus = img_trial_type_3_trials.pop()
        elif trial_type == 4:
            text_stimulus = text_trial_type_4_trials.pop()
            image_stimulus = img_trial_type_4_trials.pop()


        biasFile.write(image_stimulus)
        biasFile.write("\n")
        ser.write("f")

        # set stimulus colors based on trial type
        if trial_type == 1 or trial_type == 2:
             stimulusColor = [1, 1, 1]
        elif trial_type >2:
             stimulusColor = [-1, 1, -1]
      End Routine:
        ser.write("f")
        while ser.in_waiting > 0:
            biasFile.write(ser.readline())

        biasFile.write("endOfImage\n")
      End Experiment:
        testNumber = testNumber + 1
        biasFile.close()
    ImageComponent stimulusImageBox
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0.3
      image [set every repeat] = $image_stimulus
      size = .6
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    TextComponent stimulusTextBox
      color [set every repeat] = $stimulusColor
      stopVal [duration (s)] = 10
      text [set every repeat] = $text_stimulus
      startVal [time (s)] = 0.3
      letterHeight = 0.1
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  Routine instruction
    CodeComponent block_code
      Begin Experiment:
        # Dependencies
        import itertools  # for flattening lists of lists into lists
        import random
        import math  # for math.ceil() rounding up
        import serial
        import time

        ser = serial.Serial(port="COM5", baudrate=19200)
        testNumber = 0

        # Import stimuli exemplars
        exemplars_filename = 'stimuli.xlsx'
        exemplars = data.importConditions(exemplars_filename)# Import stimuli exemplars

        # Determine rows of examplars (i.e., max number of rows)
        """
        This method creates a fully counterbalanced presentation of exemplars when there are 5
        of them, but it will not present each one an equal number of times it the n diverges from 5.
        """
        n_exemplars = len(exemplars)
        list_multiplier = int(math.ceil(10/n_exemplars))  # math.ceil() rounds up. 10 is the derived from way block lengths are calculated. Admittedly, this comment doensn't adequately document why it's ten. Honestly, I have to work it out of my fingers every time and can't explain it.

        # Trial generation function
        def generate_trials(trial_type_column, multiplier):
            """Generate a shuffled list of stimuli exemplars from a column in an excel stimuli file"""
            a = dict()  # declare a dict to be populated
            for i in range(len(exemplars)):
                a[i] = [exemplars[i][trial_type_column]] * multiplier  # populate the dict from vertical reads of the conditions
            a = a.values()  # extract only values (and not keys) from the list of dicts
            a = list(itertools.chain(*a))  # flatten the list of dicts into a list
            random.shuffle(a)  # shuffle this list, so that it can be drawn from by the trials
            return a

        # declare trial rows (not sure if necessary, but can't be bothered to removed and test)
        trial_rows = ""


        block_order = 1
      Begin Routine:
        # set the block length and the rows to pull from based on the current block
        # this layout follows Nosek et al. 2007, "The Implicit Association Test at age 7: A methodological and conceptual review"
        if blocks.thisN == 0:
            trial_rows = "0:2"
            n_block_repeats = 10   #2*10 = 20 trials
            modified_list_multiplier = list_multiplier
        elif blocks.thisN == 1:
            trial_rows = "2:4"
            n_block_repeats = 10   #2*10 = 20 trials
            modified_list_multiplier = list_multiplier
        elif blocks.thisN == 2:
            trial_rows = "0:4"
            n_block_repeats = 5   #4*5 = 20 trials
            modified_list_multiplier = list_multiplier
        elif blocks.thisN == 3:
            trial_rows = "0:4"
            n_block_repeats = 10   #4*10 = 40 trials
            modified_list_multiplier = list_multiplier
        elif blocks.thisN == 4:
            trial_rows = "0:2"
            n_block_repeats = 20   #2*20 = 40 trials
            modified_list_multiplier = list_multiplier * 2  # because this block has a different trials:categories ratio
        elif blocks.thisN == 5:
            trial_rows = "0:4"
            n_block_repeats = 5   #4*5 = 20 trials
            modified_list_multiplier = list_multiplier
        elif blocks.thisN == 6:
            trial_rows = "0:4"
            n_block_repeats = 10   #4*10 = 40 trials
            modified_list_multiplier = list_multiplier

        # Generate list of stimuli for the block
        text_trial_type_1_trials = generate_trials('text_trial_type_1_exemplars', modified_list_multiplier)  # function and variable determined at begin exp.
        text_trial_type_2_trials = generate_trials('text_trial_type_2_exemplars', modified_list_multiplier)
        text_trial_type_3_trials = generate_trials('text_trial_type_3_exemplars', modified_list_multiplier)
        text_trial_type_4_trials = generate_trials('text_trial_type_4_exemplars', modified_list_multiplier)
        img_trial_type_1_trials = generate_trials('img_trial_type_1_exemplars', modified_list_multiplier)
        img_trial_type_2_trials = generate_trials('img_trial_type_2_exemplars', modified_list_multiplier)
        img_trial_type_3_trials = generate_trials('img_trial_type_3_exemplars', modified_list_multiplier)
        img_trial_type_4_trials = generate_trials('img_trial_type_4_exemplars', modified_list_multiplier)

        # set category and attribute labels based on the block order and current block
        if block_order == 1 and blocks.thisN <= 3:
            leftCategory = categoryA
            rightCategory = categoryB
        elif block_order == 1 and blocks.thisN > 3:
            leftCategory = categoryB
            rightCategory = categoryA
        elif block_order == 2 and blocks.thisN <= 3:
            leftCategory = categoryB
            rightCategory = categoryA
        elif block_order == 2 and blocks.thisN > 3:
            leftCategory = categoryA
            rightCategory = categoryB
      End Experiment:
        ser.close()
    TextComponent instructionsBox
      text [set every repeat] = $instructions
      startVal [time (s)] = 0.75
      letterHeight = 0.05
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    KeyboardComponent instructionsKey
      forceEndRoutine = True
      allowedKeys = 'e', 'i'
      startVal [time (s)] = 2.75
      store = nothing
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    TextComponent leftCategoryLabel_2
      pos = [-.6, .85]
      text [set every repeat] = $leftCategory
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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    TextComponent rightCategoryLabel_2
      pos = [.6, .85]
      text [set every repeat] = $rightCategory
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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    TextComponent leftAttributeLabel_2
      color = $[-1, 1, -1]
      pos = [-.6, 0.55]
      text [set every repeat] = $leftAttribute
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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    TextComponent rightAttributeLabel_2
      color = $[-1, 1, -1]
      pos = [.6, 0.55]
      text [set every repeat] = $rightAttribute
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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    TextComponent orLeft_2
      pos = [-.6, .7]
      text [set every repeat] = $orStimulus
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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    TextComponent orRight_2
      pos = [.6, .7]
      text [set every repeat] = $orStimulus
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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  Routine end
    TextComponent endBox
      stopVal [duration (s)] = 3
      text = End of the task
      startVal [time (s)] = 0.75
      letterHeight = 0.1
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Flow
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'block': 1, u'instructions': u'In this response task will you have to react to words and propositions that are presented on the screen. In the next phase words will be presented in ORANGE.\n\nIt is your job to decide as soon as possible whether the word refers to TRUE or FALSE.\n\nPress the I key if the word is synonymous with TRUE.\nPress the E key if the word is a synonym for FALSE.\n\nIf you make a mistake, hit the correct key as soon as possible.\n\nPut your two index fingers on the E and I keys. Press either one to start.'},
      {u'block': 2, u'instructions': u"The next phase some propositions will be presented in BLUE.\nThese propositons are always statements about SELF ESTEEM.\n\nYou must respond AS IF 'I am good and not bad'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nFor example:\nWhen the proposition 'I am valuable' appears, respond with the right response (TRUE).\nWhen the proposition 'I am worthless' appears, respond with the left response (FALSE).\n\nIf you make a mistake hit the correct key as soon as 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,
      {u'block': 3, u'instructions': u"Very good!\n\nThe next phase some words will be presented in ORANGE and some propositions in BLUE. These propositons are always statements about SELF ESTEEM.\n\nAgain, you must respond AS IF 'I am good and not bad'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nThe rule that you must respond to the orange words does not change:\n\nPress the I key if the word is synonymous with TRUE.\nPress the E key if the word is a synonym for FALSE.\n\nIf you make a mista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,
      {u'block': 4, u'instructions': u"IMPORANT: THE RULE FOR THE BLUE STATEMENTS HAS NOW CHANGED.\n\nYou must respond AS IF 'I am bad and not good'.\n\nPress the I key when the statement is TRUE according to the above rule.\nPress the E key when the statement is FALSE according to the above rule.\n\nFor example:\nWhen the proposition 'I am valuable' appears, respond with the left response (FALSE).\nWhen the proposition 'I am worthless' appears, respond with the right response (TRUE).\n\nIf you make a mistake, hit the correct key as soon as possible.\n\nPut your two index fingers on the E and I keys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
    Routine instruction
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = block_layout.xlsx
      loopType = fullRandom
      nReps = n_block_repeats
      Selected rows = $trial_rows
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      conditions:
        [{u'stimulusText': u'text_trial_type_1', u'stimulusImage': u'img_trial_type_1', u'trialtype': 1},
        {u'stimulusText': u'text_trial_type_2', u'stimulusImage': u'img_trial_type_2', u'trialtype': 2},
        {u'stimulusText': u'text_trial_type_3', u'stimulusImage': u'img_trial_type_3', u'trialtype': 3},
        {u'stimulusText': u'text_trial_type_4', u'stimulusImage': u'img_trial_type_4', u'trialtype': 4}]
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine end
